PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = GuessTheSound
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Routines
  Routine Study
    TextComponent Question
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        What is this sound?
    TextboxComponent ResponseBox
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      padding = None
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    MouseComponent SubmitClick
      clickable = Submit
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent ClickTheButton
      letterHeight = 0.025
      pos = (0, -0.03)
      startVal [time (s)] = 0.0
      text = Click 'Submit' to continue.
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    SoundComponent SoundItem
      sound [set every repeat] = $SoundFiles3
      startVal [time (s)] = 0.0
      volume = 1.1
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    TextComponent ItemNo
      disabled = True
      letterHeight = 0.04
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $number
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    CodeComponent FinishTrial
      Code Type = Auto->JS
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      End Routine:
        #if trials.thisN == 2: # i.e. trials 0, 1, 2 have been completed
         #   trials.finished = True # end the loop early


        #if count == 60:
        #    trials.finished = True
        #    #trials.status = PsychoJS.Status.FINISHED
    TextboxComponent Submit
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      padding = None
      pos = (0, -0.4)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      text = Submit
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  Routine Count2
    TextComponent no2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 2
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  Routine Count3
    TextComponent no3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = 3
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  Routine Count1
    TextComponent no1
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
      text = 1
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    CodeComponent AddCount
      Code Type = Auto->JS
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      Begin Routine:
        count += 1
        number = str(count) + "/110"
    TextComponent no_2
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent no_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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  Routine Welcome
    TextComponent InstructionTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to 'Sound Memory Test'!


        This experiment involves audio stimuli and requires you to wear headphones. Before we begin, please make sure that you're in a quiet listening environment, that you are wearing headphones, and that your volume is turned on.
    KeyboardComponent WelcomeContinueKey
      allowedKeys = 'space', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent CountIsZero
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0
    TextComponent WelcomContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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  Routine VolumeAdjustment
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Please adjust your volume to a comfortable level.
    SoundComponent Music
      sound = volumeadjust.wav
      startVal [time (s)] = 0.0
      volume = 0.3
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    KeyboardComponent EndAdjustment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent AdjustContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE when you are ready to begin the task
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  Routine Start
    TextComponent StartTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is the end of practice.


        We will now begin the actual task.
        There are 110 items in total. Listen to each sound carefully as they will play once.
    KeyboardComponent StartTast
      allowedKeys = 'space' 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ContinueStart
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to begin the task
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  Routine End
    TextComponent ThankyouMssg
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for your participation!



        Your Completion Code is
    TextboxComponent CompletionCode
      bold = True
      borderColor = Black
      color = Black
      editable = False
      fillColor = White
      letterHeight = 0.04
      padding = None
      size = (0.25, 0.07)
      startVal [time (s)] = 0.0
      text = 51DF249E
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    TextComponent ExitTxt
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to exit the study
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    KeyboardComponent ExitKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent CodeTxt
      letterHeight = 0.04
      pos = (0, -0.22)
      startVal [time (s)] = 0.0
      text = Please write the code down so you can enter it when you return to Prolific. You may then exit the study by pressing SPACE.
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  Routine StartAdjustment
    TextComponent VolumeBeginTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We will begin with a quick volume calibration and headphone check.

        First, we will play some music to make sure that your sound volume is at a comfortable level.



        Press SPACE to begin the volume calibration
    KeyboardComponent VolumeContinueKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MST
    TextComponent MSTQuestion
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        (Press the corresponding number on your keyboard)

        1 = REPEAT (The exact same sound has been played before)

        2 = SIMILAR (This sound is similar but not identical to a previously played sound)

        3 = NEW (This is my first time hearing this sound in this experiment)
    KeyboardComponent MSTResp
      allowedKeys = '1', '2', '3',
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Welcome1
    TextComponent WelcomeTxt1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be presented with different enviornmental sounds one by one.
        Occasionally, you will hear the same sound being played for the second time. There are also sounds that are similar but not identical to a previously played sound.
    TextComponent ContinueKey1
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent ContinueResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracticeBegin
    TextComponent InstructionTxt2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        We will first begin with a few practice trials to familiarize you with the task. During the practice, we will give you the correct answer.
    TextComponent WelcomeContinue2
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to begin practice
    KeyboardComponent WelcomeContinueKey2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        Tcount = 1
        TrialCount = 'Trial ' + str(Tcount)
  Routine Practice1
    TextComponent TrialNumber
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $PracticeSound.getDuration()
      text [set every repeat] = $TrialCount
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    SoundComponent PracticeSound
      sound [set every repeat] = $SoundFiles3
      startVal [time (s)] = 0.0
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    TextComponent PracticeCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $PracticeSound.getDuration()
      text = +
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        Tcount += 1
        TrialCount = 'Trial ' + str(Tcount)
  Routine PracticeFeedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        #Tcount += 1
        #TrialCount = 'Trial ' + str(Tcount)
        if Correct == 3:
            message = "This is a NEW sound. \nThis sound has never been played before."
        elif Correct == 2:
            message = "This is a SIMILAR sound. \nThis sound is similar but not identical to a previously played sound."
        elif Correct == 1:
            message = "This is a REPEAT sound. \nThe exact same sound has been played previously."
      End Routine:
        if Practice_resp.corr == 1:
            feedback = 'CORRECT'
        else:
            feedback = 'INCORRECT'
    KeyboardComponent Practice_resp
      allowedKeys = '1', '2', '3' 
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent PracticeMssg
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $message
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    TextComponent FeedbackCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    TextComponent Continue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press the correct number on your keyboard
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    TextComponent Options
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        1 = REPEAT
        2 = SIMILAR
        3 = NEW
  Routine MSTSound
    SoundComponent TargetSound
      sound [set every repeat] = $SoundFiles3
      startVal [time (s)] = 0.0
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    TextComponent Cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TargetSound.getDuration()
      text = +
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    TextComponent ItemNumber
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TargetSound.getDuration()
      text [set every repeat] = $number
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  Routine HeadphoneCheck
    TextComponent HeadphoneCheckBeing
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Next, we will do a short headphone check.

        On each trial, you will hear three tones. One of these tones will be quieter than the others. You will identify whether the quiet tone occurred first, second, or third.

        There are six trials in total.
    TextComponent HeadphoneContinue
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent HeadphoneContinueKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine HeadphonePlay
    SoundComponent CheckSound
      sound [set every repeat] = $File
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 0
        checkcount = str(counter) + "/6"
      Begin Routine:
        counter += 1
        checkcount = str(counter) + "/6"
      End Routine:
        if CheckResp.corr == 1:
            message = "CORRECT"
        else:
            message = "INCORRECT"
    TextComponent QuestionTxt
      letterHeight = 0.04
      startVal [time (s)] = $CheckSound.getDuration() + 0.5
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      text:
        Which tone was the quietest?
        (Press the corresponding number on your keyboard)

        1 = First  2 = Second  3 = Third
    TextComponent CheckTrial
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CheckSound.getDuration() + 0.5
      text [set every repeat] = $checkcount
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    TextComponent CrossHeadphone
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CheckSound.getDuration() + 0.5
      text = +
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    KeyboardComponent CheckResp
      allowedKeys = '1', '2', '3', 
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = $CheckSound.getDuration() + 0.5
      storeCorrect = True
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  Routine HeadphoneFeedback
    TextComponent FeedbackTxt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $message
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  Routine PracticeFeedbackII
    TextComponent FeedbackMssg
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback
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  Routine Welcome2
    TextComponent Welcome2Txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Your task is to indicate whether a sound is a NEW sound that has never been presented before, a REPEAT of a previously presented sound, or a sound that is SIMILAR but different from a previously presented sound.

        Press '1' on your keyboard for REPEAT, '2' for SIMILAR, and '3' for NEW.
    KeyboardComponent Wel2ContinueKey
      allowedKeys = 'space', 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Continue2
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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Flow
  Routine Welcome
  Routine StartAdjustment
  Routine VolumeAdjustment
  Routine HeadphoneCheck
  Routine Welcome1
  Routine Welcome2
  Routine PracticeBegin
  LoopInitiator PracticeTrials loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = GuessSounds_conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SoundFiles3', 'Practice/Seagull_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Practice/Skid_B.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Practice/Seagull_A.wav'), ('Correct', 1)]),
      OrderedDict([('SoundFiles3', 'Practice/Gargle_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Practice/Gargle_B.wav'), ('Correct', 2)]),
      OrderedDict([('SoundFiles3', 'Initial/NoRepeat/Elephant_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Repeat/ManWhistle.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Cuckoo_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Piano_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Siren_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Test/Foils/Bird.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Cat_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/NoRepeat/Baby_B.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Writing_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Piano_B.wav'), ('Correct', 2)]),
      OrderedDict([('SoundFiles3', 'Initial/NoRepeat/Sleighbells_B.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Test/Foils/Typing.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Repeat/Pour.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/HairDryer_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Cuckoo_A.wav'), ('Correct', 1)])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
    Routine Practice1
    Routine PracticeFeedback
    Routine PracticeFeedbackII
  LoopTerminator PracticeTrials
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 5:115
    conditionsFile = GuessSounds_conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SoundFiles3', 'Practice/Seagull_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Practice/Skid_B.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Practice/Seagull_A.wav'), ('Correct', 1)]),
      OrderedDict([('SoundFiles3', 'Practice/Gargle_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Practice/Gargle_B.wav'), ('Correct', 2)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Coin_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Repeat/ManWhistle.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Cuckoo_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Piano_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Siren_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Test/Foils/Bird.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Cat_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/NoRepeat/Baby_B.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Writing_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Piano_D.wav'), ('Correct', 2)]),
      OrderedDict([('SoundFiles3', 'Initial/Repeat/Phone_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Test/Foils/Typing.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Repeat/Pour.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/HairDryer_A.wav'), ('Correct', 3)]),
      OrderedDict([('SoundFiles3', 'Initial/Doubled/Cuckoo_A.wav'), ('Correct', 1)])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
    Routine Count1
    Routine MSTSound
    Routine MST
  LoopTerminator trials
  Routine End
